OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/last-training-session.ov
#0.Output Signal -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 48
  High cut frequency (Hz) = 52
  Pass band ripple (dB) = 0.5
Input signal=#2, Input stimulations=#0.Output Stimulations -> Stimulation based epoching "Eyes Closed Epochs" => #3
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#3.Epoched signal -> Channel Selector "${Frontal_Channels}"
  Channel List = ${Frontal_Channels}
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = -4.388180e-001 -3.294114e-001 1.105183e-001 8.286812e-001 5.737315e-001 -4.468933e-001 -4.999940e-001 4.702388e-001
  Number of Output Channels = 2
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-beta.cfg
-> Temporal filter "Beta"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 15
  High Cut-off Frequency (Hz) = 32
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Univariate Statistics => #11
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
#3.Epoched signal -> Channel Selector "${Theta_Channels}"
  Channel List = ${Theta_Channels}
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = -6.217922e-001 7.831823e-001 9.583738e-001 2.855165e-001
  Number of Output Channels = 2
  Number of Input Channels = 2
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-theta.cfg
-> Temporal filter "Theta"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Univariate Statistics => #19
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
Input stream 1=#19.Mean, Input stream 2=#11.Mean -> Feature aggregator => #20
Input signal=#2, Input stimulations=#0.Output Stimulations -> Stimulation based epoching "Eyes Open Epochs" => #21
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_Target
#21.Epoched signal -> Channel Selector "${Frontal_Channels}"
  Channel List = ${Frontal_Channels}
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = -4.388180e-001 -3.294114e-001 1.105183e-001 8.286812e-001 5.737315e-001 -4.468933e-001 -4.999940e-001 4.702388e-001
  Number of Output Channels = 2
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-beta.cfg
-> Temporal filter "Beta"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 15
  High Cut-off Frequency (Hz) = 32
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Univariate Statistics => #29
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
#21.Epoched signal -> 0xc67a01dc Channel Selector "${Theta_Channels}"
  Channel List = ${Theta_Channels}
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = -6.217922e-001 7.831823e-001 9.583738e-001 2.855165e-001
  Number of Output Channels = 2
  Number of Input Channels = 2
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-theta.cfg
-> Temporal filter "Theta"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Univariate Statistics => #37
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
Input stream 1=#37.Mean, Input stream 2=#29.Mean -> Feature aggregator => #38
Stimulations=#0.Output Stimulations, Features for class 1=#38, Features for class 2=#20 -> Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
#0.Output Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
