OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  Generate the target sequence using Lua Script box
Comment
  Use one Generic stream writer to write a unique file
  and another one to write a file which has always the same name.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 48
  High cut frequency (Hz) = 52
  Pass band ripple (dB) = 0.5
Lua Stimulator => #3
  Lua Script = ${Player_ScenarioDirectory}/target-sequence-generator.lua
  Start Delay = 5
  Repetition Count = 5
  Active Duration = 5
  Pause Duration = 2
-> Identity => #4
-> Sound Player "Beep"
  PLAY trigger = OVTK_StimulationId_VisualStimulationStop
  STOP trigger = OVTK_StimulationId_ExperimentStop
  File to play = ${Player_ScenarioDirectory}/beep.wav
  Loop = false
#4 -> Target
  Display images in full screen = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${Player_ScenarioDirectory}/eyes-open.jpg
  Stimulation 1 = OVTK_StimulationId_Target
  Cue Image 2 = ${Player_ScenarioDirectory}/eyes-closed.jpg
  Stimulation 2 = OVTK_StimulationId_NonTarget
#3 -> Identity => #7
Data=#2, Stimulations=#7 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input Signal=#0.Signal stream, Input Stimulations=#7 -> Generic stream writer "Archive Data"
  Filename = ${Player_ScenarioDirectory}/signals/record-[$core{date}-$core{time}].ov
  Use compression = true
Input Signal=#0.Signal stream, Input Stimulations=#7 -> 0xc67a01dc Generic stream writer "Write data to disk"
  Filename = ${Player_ScenarioDirectory}/signals/last-training-session.ov
  Use compression = true
#3 -> Identity => #11
-> Stimulation listener
  Log level to use = Information
#11 -> Player Controller "Stop scenario at the end"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
