OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/last-training-session.ov
#0.Output Signal -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 48
  High cut frequency (Hz) = 52
  Pass band ripple (dB) = 0.5
-> Channel Selector "${Theta_Channels}"
  Channel List = ${Theta_Channels}
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Theta" => #4
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
Input signal=#4, Input stimulations=#0.Output Stimulations -> Stimulation based epoching => #5
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_Target
Input signal=#4, Input stimulations=#0.Output Stimulations -> Stimulation based epoching => #6
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
Stimulations=#0.Output Stimulations, Signal condition 1=#5.Epoched signal, Signal condition 2=#6.Epoched signal -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/csp-theta.cfg
  Filter dimension = 2
  Save as box config = true
#2 -> Channel Selector "${Frontal_Channels}"
  Channel List = ${Frontal_Channels}
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Beta" => #9
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 15
  High Cut-off Frequency (Hz) = 32
  Band Pass Ripple (dB) = 0.5
Input signal=#9, Input stimulations=#0.Output Stimulations -> Stimulation based epoching => #10
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_Target
Input signal=#9, Input stimulations=#0.Output Stimulations -> Stimulation based epoching => #11
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
Stimulations=#0.Output Stimulations, Signal condition 1=#10.Epoched signal, Signal condition 2=#11.Epoched signal -> 0xc67a01dc CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/csp-beta.cfg
  Filter dimension = 2
  Save as box config = true
#0.Output Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Output Signal -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Temporal filter => #15
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 48
  High cut frequency (Hz) = 52
  Pass band ripple (dB) = 0.5
Data=#15, Stimulations=#0.Output Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
