OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/last-training-session.ov
Input stream 1=#0.Output Signal, Input stream 2=#0.Output Stimulations -> Identity => #1
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 48
  High cut frequency (Hz) = 52
  Pass band ripple (dB) = 0.5
-> Channel Selector "${Frontal_Channels}"
  Channel List = ${Frontal_Channels}
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = -2.425356e-001 -3.792141e-001 8.925652e-001 2.646592e-002 -2.337210e-001 5.828647e-001 3.493966e-001 -6.953886e-001
  Number of Output Channels = 2
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-beta.cfg
-> Temporal filter "Beta"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 15
  High Cut-off Frequency (Hz) = 32
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Univariate Statistics => #11
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
#3 -> Channel Selector "${Theta_Channels}"
  Channel List = ${Theta_Channels}
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = -7.487094e-001 6.628984e-001 7.825082e-001 6.226403e-001
  Number of Output Channels = 2
  Number of Input Channels = 2
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-theta.cfg
-> Temporal filter "Theta"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Univariate Statistics => #19
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
Input stream 1=#19.Mean, Input stream 2=#11.Mean -> Feature aggregator => #20
Features=#20 -> Classifier processor => #21
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifier.cfg
#21.Probability values -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#21.Labels -> Detected
  Display images in full screen = false
  Clear screen Stimulation = OVTK_StimulationId_VisualSteadyStateStimulationStop
  Cue Image 1 = ${Player_ScenarioDirectory}/eyes-open.jpg
  Stimulation 1 = OVTK_StimulationId_Target
  Cue Image 2 = ${Player_ScenarioDirectory}/eyes-closed.jpg
  Stimulation 2 = OVTK_StimulationId_NonTarget
Input Signal=#1.Output stream 1, Input Stimulations=#1.Output stream 2 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/online-record-[$core{date}-$core{time}].ov
  Use compression = true

Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
