OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 48
  High cut frequency (Hz) = 52
  Pass band ripple (dB) = 0.5
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Data=#2 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 2=#0.Signal stream -> Identity => #4
#4.Output stream 2 -> Channel Selector "P8"
  Channel List = P8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #6
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
Data=#6 -> Signal display "P4"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#6 -> Time based epoching
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #11
  Averaging type = Moving epoch average
  Epoch count = 4
Input stream 2=#0.Signal stream -> Identity => #12
#12.Output stream 2 -> Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #14
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
Data=#14 -> Signal display "F3"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#14 -> Time based epoching
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #19
  Averaging type = Moving epoch average
  Epoch count = 4
Input - A=#11, Input - B=#19 -> Simple DSP => #20
  Equation = (A+B)/2
Input stream 2=#0.Signal stream -> Identity => #21
#21.Output stream 2 -> Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #23
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
Data=#23 -> 0xc73e83ec Signal display "Beta F3"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#23 -> Time based epoching
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> 0xc73e83ec OSC Controller
  OSC Server IP = 192.168.1.211
  OSC Server Port = 55056
  OSC Address = /beta
Input stream 2=#0.Signal stream -> Identity => #30
#30.Output stream 2 -> Channel Selector "O1"
  Channel List = O1
  Action = Select
  Channel Matching Method = Index
-> Temporal filter => #32
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
Data=#32 -> Signal display "Alfa C3"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#32 -> Time based epoching
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #37
  Averaging type = Moving epoch average
  Epoch count = 4
Input stream 2=#0.Signal stream -> Identity => #38
#38.Output stream 2 -> Channel Selector "T8"
  Channel List = T8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #40
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
Data=#40 -> Signal display "P3"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#40 -> Time based epoching
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #45
  Averaging type = Moving epoch average
  Epoch count = 4
Input - A=#45, Input - B=#37 -> Simple DSP => #46
  Equation = (A+B)/2
Input - A=#46, Input - B=#20 -> Simple DSP => #47
  Equation = (A+B)/2
Data=#47 -> Signal display "merging"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#47 -> 0xc67a01dc OSC Controller
  OSC Server IP = 192.168.1.211
  OSC Server Port = 55056
  OSC Address = /alfa
Input stream 2=#0.Signal stream -> Identity => #50
#50.Output stream 2 -> Channel Selector "P4"
  Channel List = P4
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #52
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4.10000
  High cut frequency (Hz) = 7.00000
  Pass band ripple (dB) = 0.500000
Data=#52 -> 0xc73e83ec Signal display "TPF3"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#52 -> Time based epoching
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> 0xc73e83ec OSC Controller
  OSC Server IP = 192.168.1.211
  OSC Server Port = 55056
  OSC Address = /Theta
